PsychoPy2experiment version="2024.2.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=CHPYNJMX
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1512, 982]
  expName = thisExp
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine instructions
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        incorrect_actions = 0

        cogmap={'baby_left':'backpack',
        'baby_right':'bowtie',
        'toothbrush_left':'car',
        'toothbrush_right':'backpack',
        'backpack_left':'lamp',
        'backpack_right':'zebra',
        'car_left':'cat',
        'car_right':'lamp',
        'bowtie_left':'knight',
        'bowtie_right':'lamp'
        }

        cogmap_replanning={'baby_left':'car',
        'baby_right':'backpack',
        'toothbrush_left':'bowtie',
        'toothbrush_right':'backpack',
        'hourglass_left':'bending',
        'hourglass_right':'zebra',
        'backpack_left':'lamp',
        'backpack_right':'hourglass',
        'lamp_left':'zebra',
        'lamp_right':'knight',
        'cat_left':'zebra',
        'cat_right':'hammer',
        'car_left':'cat',
        'car_right':'lamp',
        'bowtie_left':'lamp',
        'bowtie_right':'lamp'
        }

        current_image='images/baby.png'
        current_image2='images/backpack.png'
        current_image3='images/lamp.png'
        current_image4='images/zebra.png'
        alternative_image='images/car.png'
    TextComponent instruction_test
      color = black
      letterHeight = 0.042
      startVal [time (s)] = 0.0
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      text:
        The beginning of the task will involve learning associations between images. You will be told to click left or right at a starting image. You will then see which picture you see next. Your goal is to learn how to get from one picture to the next depending on which direction you go — left or right.

        If you fail to click the correct button 5 times, you will be exited from the game and not win any money. Also, be sure NOT TO CLICK ESC on your keyboard, as that will also exit you from the game.

        LAST, if you do not get a high enough score on a simple memory test by the end of training, you are at risk of losing half of your money. So pay attention on memory quizzes!

        Press SPACE to continue
    KeyboardComponent end_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine learn1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_1
      image [set every repeat] = $image1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 1
      text [set every repeat] = $action1
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  Routine learn2
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    ImageComponent image_2
      image [set every repeat] = $image2
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine check_incorrect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            msg_incorrect='correct'
            incorrect_loop2.finished = True
            continueRoutine=False
        else:
            msg_incorrect='You clicked the wrong button! If you click the wrong button 5 times, the game will stop and you will NOT GET PAID because you failed to follow instructions!'
            incorrect_actions+=1
            continueRoutine=True
            if incorrect_actions>15:
                psychoJS.quit()
    TextComponent text_incorrect
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg_incorrect
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  Routine between
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = Time for a memory quiz based on what you learned
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    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Routine:
        quiz1_count=1
        quiz2_count=1
  Routine back_to_learn
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Take a break for 5 seconds before the next round of learning
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  Routine break_routine
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = Next stage: Planning phase!
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
  Routine next_trial
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    TextComponent next_trial_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = next trial…
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  Routine check_incorrect1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            msg_incorrect='correct'
            incorrect_loop.finished = True
            continueRoutine=False
        else:
            msg_incorrect='You clicked the wrong button! If you click the wrong button 5 times, the game will stop and you will NOT GET PAID because you failed to follow instructions!'
            incorrect_actions+=1
            continueRoutine=True
            if incorrect_actions>14:
                psychoJS.quit()
    TextComponent text_incorrect_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg_incorrect
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  Routine instructions_reward
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    TextComponent instructions_rewardstage
      color = black
      letterHeight = 0.032
      startVal [time (s)] = 0.0
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      text:
        Now it’s time to use what you learned to get rewards. You will play a series of trials that each have 3 decisions. Each decision, you will be shown a long-term BIG reward that you can get to at the 3rd decision. You can plan how to get there based off of what you learned.

        The first choice will always involve choosing whether you start at the picture of the BABY or the picture of the TOOTHBRUSH. After that, you will click either LEFT or RIGHT to try to get to new pictures.

        IMPORTANT: You will always have the option to click SPACE to win 100 points. By choosing this option, the computer will take take you to a new image by choosing left or right for you. For example, on the first trial, if you click SPACE, the computer will randomly select either BABY or TOOTHBRUSH for you.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      store = nothing
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    TextComponent text_46
      color = black
      letterHeight = 0.045
      pos = (0, -0.32)
      startVal [time (s)] = 10
      text = Press SPACE to continue 
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  Routine plan1_info_2
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        w2=400
    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0
      text = Choose LEFT for BABY or RIGHT for TOOTHBRUSH or SPACE. Make this choice by considering how to get the most points at the images shown below.
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    ImageComponent R1
      image = images/computer.png
      pos = (-0.15,-0.12)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent R2
      image [set every repeat] = $r2
      pos = (0.15, -.12)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent rew1
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.27)
      startVal [time (s)] = 0.0
      text = SPACE for 100
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    TextComponent rew2
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.27)
      startVal [time (s)] = 0.0
      text [set every frame] = $w2
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    TextComponent text_6
      color = black
      letterHeight = 0.025
      pos = (0.15, -0.32)
      startVal [time (s)] = 0.0
      text = Left or Right
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    KeyboardComponent plan1_response
      allowedKeys = 'left', 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent babyleft
      image = images/baby.png
      pos = (-0.2, 0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent toothbrushright
      image = images/toothbrush.png
      pos = (0.2, 0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
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    TextComponent text_117
      color = red
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_planning
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    TextComponent text_120
      color = red
      letterHeight = 0.04
      pos = (-0.1, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine plan2_info
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        if ((plan1_response.keys === "space")) {
            total_planning += 100;
            if ((Math.random() > 0.5)) {
                x = "baby";
            } else {
                x = "toothbrush";
            }
        } else {
            if ((plan1_response.keys === "left")) {
                x = "baby";
            } else {
                if ((plan1_response.keys === "right")) {
                    x = "toothbrush";
                }
            }
        }
        current_image = (("images/" + x) + ".png");
      Begin Routine:
        if plan1_response.keys=='space':
            total_planning+=100
            if random.random()>0.5:
                x='baby'
            else:
                x='toothbrush'
        elif plan1_response.keys=='left':
            x='baby'
        elif plan1_response.keys=='right':
            x='toothbrush'
        current_image='images/'+x+'.png'
      End JS Routine:
        psychoJS.experiment.addData("image_arrived", current_image);
    TextComponent text_7
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = You are now at the image below. Choose left or right or SPACE based off of what you learned to get the most points in images listed below!
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    ImageComponent R1_2
      image [set every repeat] = images/computer.png
      pos = (-0.15,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent R2_2
      image [set every repeat] = $r2
      pos = (0.15, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent rew1_2
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      text = SPACE for 100
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    TextComponent rew2_2
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.22)
      startVal [time (s)] = 0.0
      text [set every frame] = $w2
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    TextComponent text_10
      color = black
      letterHeight = 0.025
      pos = (0.15, -0.32)
      startVal [time (s)] = 0.0
      text = Left or Right
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    KeyboardComponent plan2_response
      allowedKeys = 'left', 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent current_image_decision2
      image [set every repeat] = $current_image
      pos = (0, 0.17)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_118
      color = red
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_planning
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    TextComponent text_121
      color = red
      letterHeight = 0.04
      pos = (-0.1, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine quiz2
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    ImageComponent target_quiz1_2
      image [set every repeat] = $image1
      pos = (0,.15)
      size = (0.4,0.4)
      startVal [time (s)] = 0.0
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    TextComponent question_quiz1_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent answer_quiz1_2
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent answer1_2
      image [set every repeat] = $ans1
      pos = (-0.45, -.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent answer2_2
      image [set every repeat] = $ans2
      pos = (-0.15, -.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent answer3_2
      image [set every repeat] = $ans3
      pos = (0.15, -.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent answer4_2
      image [set every repeat] = $ans4
      pos = (0.45, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent a1_2
      color = black
      letterHeight = 0.05
      pos = (-0.45, -0.35)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent a2_2
      color = black
      letterHeight = 0.05
      pos = (-.15, -0.35)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent a3_2
      color = black
      letterHeight = 0.05
      pos = (.15, -0.35)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent a4_2
      color = black
      letterHeight = 0.05
      pos = (0.45, -0.35)
      startVal [time (s)] = 0.0
      text = 4
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    CodeComponent code_45
      Code Type = Auto->JS
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      End Routine:
        if answer_quiz1_2.corr:
            quiz2_score+=1
            msg="Correct! Good job!"
        else:
            msg="INCORRECT :("
  Routine plan3_info
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    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        if ((plan2_response.keys === "space")) {
            total_planning += 100;
            if ((Math.random() > 0.5)) {
                x = "left";
            } else {
                x = "right";
            }
        } else {
            if ((plan2_response.keys === "left")) {
                x = "left";
            } else {
                if ((plan2_response.keys === "right")) {
                    x = "right";
                }
            }
        }
        current_image2 = (("images/" + cogmap[((current_image.slice(7, (- 4)) + "_") + x)]) + ".png");
      Begin Routine:
        if plan2_response.keys=='space':
            total_planning += 100;
            if random.random()>0.5:
                x='left'
            else:
                x='right'
        elif plan2_response.keys=='left':
            x='left'
        elif plan2_response.keys=='right':
            x='right'
        current_image2='images/'+cogmap[current_image[7:-4]+'_'+x]+'.png'
      End JS Routine:
        psychoJS.experiment.addData("image_arrived2", current_image2);

        if ((plan3_response.keys === "space")) {
            total_planning += 100;
            if ((Math.random() > 0.5)) {
                x = "left";
            } else {
                x = "right";
            }
        } else {
            if ((plan3_response.keys === "left")) {
                x = "left";
            } else {
                if ((plan3_response.keys === "right")) {
                    x = "right";
                }
            }
        }
        current_image3 = (("images/" + cogmap[((current_image2.slice(7, (- 4)) + "_") + x)]) + ".png");
    TextComponent text_14
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = You are now at the image below. Choose left or right or SPACE based off of what you learned to get the most points in images listed below!
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    ImageComponent R1_3
      image = images/computer.png
      pos = (-0.15,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent R2_3
      image [set every repeat] = $r2
      pos = (0.15, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent rew1_3
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      text = SPACE for 100
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    TextComponent rew2_3
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.22)
      startVal [time (s)] = 0.0
      text [set every frame] = $w2
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    TextComponent text_15
      color = black
      letterHeight = 0.025
      pos = (0.15, -0.32)
      startVal [time (s)] = 0.0
      text = Left or Right
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    KeyboardComponent plan3_response
      allowedKeys = 'left', 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent current_image_decision3
      image [set every repeat] = $current_image2
      pos = (0, 0.17)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_122
      color = red
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_planning
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    TextComponent text_123
      color = red
      letterHeight = 0.04
      pos = (-0.1, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine planning4
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    CodeComponent code_25
      Code Type = Both
      Begin JS Routine:
        if ((current_image3 === r2)) {
            total_planning += w2;
        }
        psychoJS.experiment.addData("image_arrived3", current_image3);
      Begin Routine:
        if current_image3==r2:
            total_planning+=w2
    ImageComponent image_4
      image [set every repeat] = $current_image3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You arrived here! 
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    TextComponent text_119
      color = red
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $total_planning
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    TextComponent text_131
      color = red
      letterHeight = 0.04
      pos = (-0.12, -0.41)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Total=
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  Routine end
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    TextComponent text_20
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thanks for your participation! you will have your Prolific credit and bonuses updated in the next couple of weeks.
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  Routine instructions_example_trial
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    CodeComponent code_13
      Code Type = Both
      Begin JS Routine:
        al1=400
        al2=50
      Begin Routine:
        al1=400
        al2=50
    TextComponent text_13
      color = black
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text = EXAMPLE TRIAL: You are now at the image below. Choose left or right based off of what you learned to get the most points in images listed below!
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    ImageComponent R1_5
      image = images/knight.png
      pos = (-0.15,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent R2_5
      image = images/computer.png
      pos = (0.15, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent rew1_5
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $al1
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    TextComponent rew2_5
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text [set every frame]:
        SPACE: Win 100
    TextComponent text_21
      color = black
      letterHeight = 0.025
      pos = (0, -0.38)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Choose LEFT or RIGHT to try to win points!
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    KeyboardComponent plan2_response_2
      allowedKeys = 'left', 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    ImageComponent current_image_decision2_2
      image = images/baby.png
      pos = (0, 0.17)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine second_instructions
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_22
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your goal is to learn which new picture you will arrive at after selecting a picture by clicking LEFT or RIGHT on your keyboard.

        NOTE: There will be a SECOND phase after this first phase, where you can use what you learned to win even more money!

        Press SPACE to continue
  Routine third_instructions
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    KeyboardComponent responseleft
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    TextComponent text_23
      color = black
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Remember, your goal is to remember which images come after you choose and the action, LEFT or RIGHT at a starting image. For example, choosing LEFT at a picture of an APPLE may take you to a different image than choosing RIGHT.

        To show you what this looks like, you will do a practice round. You will be tested to see if you remember which images come after the starting image. Good luck!

        Press SPACE to continue
  Routine practice1
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    ImageComponent image_22
      image [set every repeat] = apple.png
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 1,'1','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent text_40
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press left
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  Routine practice1_result
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    ImageComponent image_20
      image [set every repeat] = $image_prac2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine practice1_quiz
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    ImageComponent basket_2
      image = basket.png
      pos = (-0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fireworks_2
      image = fireworks.png
      pos = (0, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree_2
      image [set every repeat] = tree.png
      pos = (0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_25
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_27
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent practice_answer
      allowedKeys = 'a','g','l'
      correctAns = a
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_21
      Code Type = Auto->JS
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      End Routine:
        if practice_answer.corr:
            print('correct answer')
            practice_loop.finished = True
    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Which image below did you see after clicking LEFT at the apple image?
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  Routine practice1_quizfeedback
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if practice_answer.corr:
          msg="Correct!"
        else:
          msg="Wrong! Re-starting practice"
    TextComponent text_30
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine memory_quiz_instructions
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    TextComponent text_75
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        During your learning about how to get from one picture to another, you will be tested on your learning.

        Every so often (30 trials) you will be asked to use what you’ve learned to try to reach an image where money is hiding. Each of these questions has a correct answer, and we will reward you at the end of the study based on how well you did on these questions.

        Specifically, we will pick a total of 5 rounds at random from these rounds where you can earn reward to determine how much money you win

        Press SPACE to continue
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz3
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    TextComponent text_71
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        3. What happens during the memory quiz?

        a.you must recall how the pictures look

        b. you must REMEMBER the action that will take you a starting image to an upcoming image. 5 of these questions picked at random by the computer will add money to your total

        c. you must recall images you most likely DO NOT see after taking an action at a starting image

        d. FORGET the action that will take you a starting image to an upcoming image.
    CodeComponent code_31
      Code Type = Auto->JS
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      End Routine:
        if key_resp_19.keys=='b':
            correct+=1
    KeyboardComponent key_resp_19
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz4
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    TextComponent text_72
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        4. After learning you will:

        a. Be done with the task

        b. Use what you learned to plan how to get to certain images

        c. Asked to paint an image of what you learned

        d. answer many questions about how much you liked the game
    CodeComponent code_35
      Code Type = Auto->JS
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      End Routine:
        if key_resp_20.keys=='b':
            correct+=1

        if correct==4:
            instructions_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_20
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz_feedback
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    TextComponent result_q_instr
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      text [set every repeat] = $msg
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  Routine consent
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    ImageComponent image_11
      image [set every repeat] = consent1.png
      pos = (0, 0.05)
      size = (0.65, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click SPACE to Continue
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  Routine consent2
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    ImageComponent image_13
      image [set every repeat] = consent2.png
      pos = (0, 0.1)
      size = (0.65, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next_2
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_90
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        I certify that I have read the informed consent and received the information to contact the investigators if necessary.

        Click ‘y’ for YES
        Click ’n’ for NO, and you will EXIT the study
    CodeComponent code_19
      Code Type = Auto->JS
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      End Routine:
        if consent1_next_2.keys=='n':
            psychoJS.quit()
  Routine start_learning
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    TextComponent text_31
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Press SPACE to start learning!
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine quiz1_i
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    TextComponent text_43
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What is the goal of the picture game?

        a.to learn the type of picture

        b.to learn the meaning of pictures

        c.to learn which pictures come after taking actions (left or right) certain pictures

        d.to learn how actions you take at a picture give you rewards or punishments
    CodeComponent code_27
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_17.keys=='c':
            correct+=1
    KeyboardComponent key_resp_17
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz2_i
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    TextComponent text_70
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        2. Will you be quizzed during a learning phase about how to get to certain images?

        a. no

        b. yes, every trial you will be quizzed

        c. yes, every so oftern (30 trials) you will be quizzed

        d. yes, but only at the end of training
    CodeComponent code_30
      Code Type = Auto->JS
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      End Routine:
        if key_resp_18.keys=='c':
            correct+=1
    KeyboardComponent key_resp_18
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_planning_new
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    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        al1=400
        w2=400

        planning_total="Total = 0";
      Begin Routine:
        al1=400
        w2=400

        planning_total="Total = 0"
    TextComponent text_32
      color = black
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text = EXAMPLE Decision 1: Choose SPACE and the computer randomly selects which state you get to.
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    ImageComponent R1_6
      image = images/computer.png
      pos = (-0.15,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent R2_6
      image = images/knight.png
      pos = (0.15, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent rew1_6
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = SPACE for 100
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    TextComponent rew2_6
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $w2
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    KeyboardComponent plan2_response_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    TextComponent text_34
      color = black
      letterHeight = 0.04
      pos = (0.20, -0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Long-Term Reward
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    TextComponent text_41
      color = black
      letterHeight = 0.04
      pos = (-0.20, -0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Computer Chooses
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    TextComponent text_114
      color = red
      letterHeight = 0.04
      pos = (0.1, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_practice_planning
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    TextComponent text_128
      color = red
      letterHeight = 0.04
      pos = (-0.10, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine long_term_reward_instructions
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    TextComponent instructions_rewardstage_2
      color = black
      letterHeight = 0.032
      startVal [time (s)] = 0.0
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      text:
        Each planning trial has 3 decisions. You have the chance to win 400 points if you successfully make it to that destination at the 3rd decision. It is always presented on the bottom RIGHT of the 3 decisions, and will NEVER CHANGE across the 3 decisions.

        By contrast, on the bottom LEFT, you can choose to have the computer select which state to go to next, and win 100 points instantly! You will see your total score.

        IMPORTANT: MANY TIMES YOU CAN WIN BOTH THE IMMEDIATE REWARD AND THE LONG TERM REWARD!
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      store = nothing
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    TextComponent text_45
      color = black
      letterHeight = 0.05
      pos = (0, -0.32)
      startVal [time (s)] = 10.0
      text = press SPACE to continue
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  Routine start_real_planning
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    TextComponent text_42
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting the actual planning phase.

        REMEMBER: You have UNLIMITED time to plan. Try to figure out when it makes sense press SPACE and have the computer choose for you in a way that still makes sure you can get to the BIG REWARD.

        press SPACE to start and good luck!
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        total_planning=0
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  Routine quiz_planning_1
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    TextComponent text_47
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Planning Quiz

        1. What is always the first decision out of the 3 decisions for EVERY planning trial?

        a. between CAT and TOOTHBRUSH

        b. between CAR and TOOTHBRUSH

        c. between BABY and TOOTHBRUSH

        d. You start at a different point each planning trial
    CodeComponent code_28
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_21.keys=='c':
            correct+=1
    KeyboardComponent key_resp_21
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz_planning_2
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    TextComponent text_73
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        2. What is the long term reward depicted on bottom right?

        a. It is a reward you can obtain every decision out of the 3 decisions.

        b. It is a big reward you can get only at the 3rd decision. Its location will not change across all 3 decisions to allow you to plan how to get there!

        c. It is always a reward that you can ONLY get by AVOIDING going for short-term rewards.

        d. It is your total amount of winnings in the game.
    CodeComponent code_32
      Code Type = Auto->JS
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      End Routine:
        if key_resp_22.keys=='b':
            correct+=1
    KeyboardComponent key_resp_22
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine quiz_planning_3
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    TextComponent text_74
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Planning Quiz

        3. What happens when you press SPACE ?

        a. It is the reward you get from memory quizzes during learning

        b. You instantly get 100 points but the computer randomly selects LEFT or RIGHT for you, so you don’t know the image you’ll end up at next.

        c. It gives you 60 points but PREVENTS you from getting the LONG-term reward.

        d. It is the rewards you already got during what you previously learned.
    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        if key_resp_24.keys=='b':
            correct+=1

        if correct==3:
            instructions_planning_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_24
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine see_planning_trials
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    TextComponent text_48
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will see how planning trials look in the real game. These trials will not include the same images you just learned about. However, the same things you learn now in practice will apply to the real planning phase.

        Press SPACE to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=0
        w2=400
  Routine instructions_planning_2
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    TextComponent text_50
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        VERY RARELY, the computer will take you to a location you didn’t want to go.

        Try your best to get the most points possible! You can win the most points both by collecting immediate rewards by clicking SPACE and by reaching and winning the long-term goals.

        You will always see your WINNING TOTAL on each screen and your goal is to win the most points to win th most money!

        Press SPACE to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        directions_dict={'baby_left':'images/backpack.png',
        'baby_right':'images/bowtie.png',
        'toothbrush_left':'images/car.png',
        'toothbrush_right':'images/backpack.png',
        'hourglass_right':'images/hammer.png',
        'hourglass_left':'images/knight.png',
        'backpack_left':'images/lamp.png',
        'backpack_right':'images/hourglass.png',
        'lamp_left':'images/hammer.png',
        'lamp_right':'images/bending.png',
        'cat_left':'images/hammer.png',
        'cat_right':'images/zebra.png',
        'car_left':'images/cat.png',
        'car_right':'images/lamp.png',
        'bowtie_left':'images/lamp.png',
        'bowtie_right':'images/lamp.png'}



        incorrect_actions=0
        action='left.png'



        correct_quiz='p'
        percent_correct=''
        text_correct=''
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  Routine planning_2_instructions
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=total_practice_planning+100
    TextComponent text_52
      color = black
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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      text:
        The COMPUTER chose LEFT and now you’re at the PLANET.
        Decision 2: Choose the computer again by clicking SPACE.
    ImageComponent R1_9
      image = images/computer.png
      pos = (-0.15,-0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent R2_9
      image = images/knight.png
      pos = (0.15, -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent rew1_9
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = SPACE for 100
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    TextComponent rew2_9
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $w2
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    TextComponent text_53
      color = black
      letterHeight = 0.025
      pos = (0.15, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Choose LEFT or RIGHT
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    KeyboardComponent plan2_response_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    ImageComponent current_image_decision2_5
      image = planet.png
      pos = (0, 0.17)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent text_115
      color = red
      letterHeight = 0.04
      pos = (0.1, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_practice_planning
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    TextComponent text_129
      color = red
      letterHeight = 0.04
      pos = (-0.15, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine questionnaire_start
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    TextComponent text_33
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = First you’re going to answer a few questions about how much you worry. 
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
  Routine PSWQ15
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    TextComponent text_105
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = Rate each of the following statements on a scale of 1 (“not at all typical of me”) to 5 (“very typical of me”). Please do not leave any items blank.
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    TextComponent text_106
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I worry all the time.
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    TextComponent text_107
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all typical - 2 - 3 - 4 - 5=Very typical
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    KeyboardComponent key_resp_34
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PSWQ16
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    TextComponent text_108
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = Rate each of the following statements on a scale of 1 (“not at all typical of me”) to 5 (“very typical of me”). Please do not leave any items blank.
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    TextComponent text_109
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I have been a worrier all my life.
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    TextComponent text_110
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all typical - 2 - 3 - 4 - 5=Very typical
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    KeyboardComponent key_resp_35
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_planning_new3
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=total_practice_planning
    TextComponent text_136
      color = black
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text = Decision 3: You are at the BASKET. Choose right to get the BIG REWARD at the KNIGHT. 
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    ImageComponent R1_11
      image = images/computer.png
      pos = (-0.15,-0.1)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent R2_11
      image = images/knight.png
      pos = (0.15, -0.1)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent rew1_11
      color = green
      letterHeight = 0.05
      pos = (-0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = SPACE for 100
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    TextComponent rew2_11
      color = green
      letterHeight = 0.05
      pos = (0.15, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $w2
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    KeyboardComponent plan2_response_5
      allowedKeys =  'right','space','left'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30.0
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    ImageComponent current_image_decision2_6
      image = basket.png
      pos = (0, 0.17)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent text_137
      color = black
      letterHeight = 0.04
      pos = (0.20, -0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Long-Term Reward
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    TextComponent text_138
      color = black
      letterHeight = 0.04
      pos = (-0.20, -0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Short-Term Reward
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    TextComponent text_139
      color = red
      letterHeight = 0.04
      pos = (0.1, -0.41)
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_practice_planning
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    TextComponent text_140
      color = red
      letterHeight = 0.04
      pos = (-0.15, -0.41)
      startVal [time (s)] = 0.0
      text = Total=
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  Routine practice_planning_outcomes
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning+=400
    ImageComponent image_6
      image = images/knight.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_141
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You arrived here! 
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    TextComponent text_142
      color = red
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $total_practice_planning
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    TextComponent text_143
      color = red
      letterHeight = 0.04
      pos = (-0.12, -0.41)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Total=
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  Routine lesson_practice
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    TextComponent text_144
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        If you do well in upcoming planning trials, you can WIN even more bonus MONEY!

        IMPORTANT: when you press SPACE to have the computer choose for you, it will always take you to a new image the way you learned about in the learning phase. After this random choice, you will then be able to try to reach the long term goal image from where the random choice led you to.

        Press SPACE to continue
    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=0
  Routine lesson_practice_2
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    TextComponent text_145
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        IMPORTANT: Each big long-term image you can plan to reach has a different amount of ROUTES to get there. For example, one long-term image may have only one route, while another may have many! Use this to choose well and win the most points you can!


        Press SPACE to continue
    KeyboardComponent key_resp_38
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=0
  Routine forgetting_paths1
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    TextComponent question_quiz1_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = Plan the 2 actions in your head how to get from the left image to the right image. You have two minutes to plan.
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    KeyboardComponent answer_quiz1_3
      allowedKeys = "left","right"
      correctAns = $correct_answer1
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      store = first key
      storeCorrect = True
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    ImageComponent answer1_3
      image [set every repeat] = $ans1
      pos = (-0.40, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent answer2_3
      image [set every repeat] = $ans2
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent answer3_3
      image [set every repeat] = $ans3
      pos = (0.40, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent a1_3
      color = black
      letterHeight = 0.1
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = >
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    TextComponent a2_3
      color = black
      letterHeight = 0.1
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = >
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    TextComponent text_146
      color = black
      letterHeight = 0.055
      pos = (0, -0.28)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      text = Click the two actions (a sequence of LEFT and RIGHT) on the keyboard that will get you from the image on the far left to the image on the far right.
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
  Routine immediate_rewar_lesson
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    TextComponent text_148
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = NOTICE: You were able to avoid planning twice by clicking SPACE to win 200 more points and STILL arrive at the long-term goal of KNIGHT. In the upcoming planning phase, use what you know about how to get to long term goals to determine when it is best to choose yourself or let the COMPUTER choose for you to win more points. Press SPACE to continue.
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    KeyboardComponent key_resp_39
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        total_practice_planning=0
  Routine planning_paths
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    TextComponent text_149
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        Plan how to get from either the BABY or TOOTHBRUSH to new images.

        Plan how to get from one image to the next image.

        REMEMBER: Nothing has changed since you initially learned about how to navigate between pictures at the beginning of the task.
    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        quiz1_count=1
        quiz_planning_corr=0
    KeyboardComponent key_resp_40
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text_49
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 5
      text = Press space to begin
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  Routine correct_forget_paths
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    TextComponent next_trial_text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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    TextComponent text_151
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $quiz_planning_corr
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  Routine total_score_planning
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    CodeComponent code_43
      Code Type = Both
      Begin JS Routine:
        total_planning_score_training = ((quiz_planning_corr / 8.0) * 100);
        psychoJS.experiment.addData("score_planning_training",total_planning_score_training);
      Begin Routine:
        total_planning_score_training=(quiz_planning_corr/8.0)*100
    TextComponent next_trial_text_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $total_planning_score_training
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    TextComponent text_150
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Percent correct:
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
  Routine planningpathstraining2
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    TextComponent question_quiz1_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = Plan the 2 actions in your head how to get from the left image to the right image. You have two minutes to plan.
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    KeyboardComponent answer_quiz1_5
      allowedKeys = "left","right"
      correctAns = $correct_answer2
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      store = first key
      storeCorrect = True
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    ImageComponent answer1_5
      image [set every repeat] = $ans1
      pos = (-0.40, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent answer2_5
      image [set every repeat] = $ans2
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent answer3_5
      image [set every repeat] = $ans3
      pos = (0.40, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent a1_5
      color = black
      letterHeight = 0.1
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = >
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    TextComponent a2_5
      color = black
      letterHeight = 0.1
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = >
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    CodeComponent code_44
      Code Type = Both
      Begin JS Routine:
        thisResp = [];
      End JS Routine:
        quiz1_count += 1;
        if (answer_quiz1_3.corr) {
            if (answer_quiz1_5.corr) {
                  msg = "correct! well done";
                  quiz_planning_corr += 1;
                   }
         }
        else {
             msg = "incorrect";
        }
    TextComponent text_152
      color = black
      letterHeight = 0.055
      pos = (0, -0.28)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
      text = Click the two actions (a sequence of LEFT and RIGHT) on the keyboard that will get you from the image on the far left to the image on the far right.
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  Routine counter_quizzes_round
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    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        quiz1_score=0
        quiz2_score=0
  Routine instructions4
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    TextComponent text_153
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        If you fail to get 100% on the questions that make sure you understand the ways to get from one picture to the next picture, THE GAME WILL EXIT and you will receive only partial credit for time spent.

        pay attention during learning so you can win more money!
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  Routine q2_instructions
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    TextComponent text_155
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Now you’re going to answer a few questions about how much you've been feeling. 
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  Routine AM1
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    TextComponent text_156
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much has this happened to you in past two weeks? 1=Not at all, 3=Sometimes, 5=All the time
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    TextComponent text_157
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Feel happier or more cheerful than usual.
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    TextComponent text_158
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=All the time
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    KeyboardComponent key_resp_41
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AM2
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    TextComponent text_159
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much has this happened to you in past two weeks? 1=Not at all, 3=Sometimes, 5=All the time
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    TextComponent text_160
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Feel more self-confident than usual.
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    TextComponent text_161
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=All the time
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    KeyboardComponent key_resp_42
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AM3
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    TextComponent text_162
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much has this happened to you in past two weeks? 1=Not at all, 3=Sometimes, 5=All the time
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    TextComponent text_163
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Need LESS Sleep than usual.
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    TextComponent text_164
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=All the time
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    KeyboardComponent key_resp_43
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AM4
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    TextComponent text_165
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much has this happened to you in past two weeks? 1=Not at all, 3=Sometimes, 5=All the time
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    TextComponent text_166
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I talk more than usual.
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    TextComponent text_167
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=All the time
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    KeyboardComponent key_resp_44
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AM5
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    TextComponent text_168
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much has this happened to you in past two weeks? 1=Not at all, 3=Sometimes, 5=All the time
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    TextComponent text_169
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I talk more than usual.
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    TextComponent text_170
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=All the time
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    KeyboardComponent key_resp_45
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q3_instructions
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    TextComponent text_171
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Answer Yes (with 'y' key) or No (with 'n') key to the following questions
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  Routine SPQ1
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    TextComponent text_173
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Have you ever had the sense that some person or force is around you, even though you
        cannot see anyone?
    TextComponent text_174
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_46
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ2
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    TextComponent text_175
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Are you sometimes sure that other people can tell what you are thinking?
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    TextComponent text_176
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_47
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ3
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    TextComponent text_177
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Have you ever noticed a common event or object that seemed to be a special sign for
        you?
    TextComponent text_178
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_48
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ4
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    TextComponent text_179
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Do you often pick up hidden threats or put-downs from what people say or do?
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    TextComponent text_180
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_49
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ5
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    TextComponent text_181
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Do you often pick up hidden threats or put-downs from what people say or do?
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    TextComponent text_182
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_50
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ6
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    TextComponent text_183
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Have you had experiences with astrology, seeing the future, UFOs, ESP, or a sixth
        sense?
    TextComponent text_184
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_51
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ7
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    TextComponent text_185
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Do you ever suddenly feel distracted by distant sounds that you are not normally aware
        of?
    TextComponent text_186
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_52
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ8
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    TextComponent text_187
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Do you often have to keep an eye out to stop people from taking advantage of you?
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    TextComponent text_188
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_53
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ9
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    TextComponent text_189
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = People sometimes find me aloof and distant.
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    TextComponent text_190
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_54
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ10
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    TextComponent text_191
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = 1 feel I have to be on my guard even with friends.
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    TextComponent text_192
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_55
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SQP11
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    TextComponent text_193
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I feel very uncomfortable in social situations involving unfamiliar people.
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    TextComponent text_194
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_56
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ12
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    TextComponent text_195
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Have you found that it is best not to let other people know too much about you?
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    TextComponent text_196
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_57
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ13
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    TextComponent text_197
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I tend to keep in the background on social occasions.
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    TextComponent text_198
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_58
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ14
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    TextComponent text_199
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Do you feel that you are unable to get "close" to people?
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    TextComponent text_200
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_59
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ15
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    TextComponent text_201
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I feel very uneasy talking to people I do not know well.
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    TextComponent text_202
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_60
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ16
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    TextComponent text_203
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I tend to keep my feelings to myself.
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    TextComponent text_204
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_61
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ17
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    TextComponent text_205
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = People sometimes comment on my unusual mannerisms and habits.
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    TextComponent text_206
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_62
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ18
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    TextComponent text_207
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Some people think that I am a very bizarre person.
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    TextComponent text_208
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_63
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ19
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    TextComponent text_209
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Some people find me a bit vague and elusive during a conversation.
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    TextComponent text_210
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_64
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ20
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    TextComponent text_211
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I sometimes use words in unusual ways.
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    TextComponent text_212
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_65
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ21
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    TextComponent text_213
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = 1 am an odd, unusual person.
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    TextComponent text_214
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_66
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPQ22
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    TextComponent text_215
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = I find it hard to communicate clearly what I want to say to people.
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    TextComponent text_216
      color = black
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = y=YES        n=NO
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    KeyboardComponent key_resp_67
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine q4_instructions
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    TextComponent text_172
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Now you will rate how much you feel several emotions at this moment
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
  Routine SS1
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    TextComponent text_217
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_218
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Dissatisfied
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    TextComponent text_219
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_68
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS2
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    TextComponent text_220
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_221
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Alert
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    TextComponent text_222
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_69
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS3
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    TextComponent text_223
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_224
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Depressed
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    TextComponent text_225
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_70
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS4
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    TextComponent text_226
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_227
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Sad
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    TextComponent text_228
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_71
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS5
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    TextComponent text_229
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_230
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Active
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    TextComponent text_231
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_72
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS6
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    TextComponent text_232
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_233
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Impatient
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    TextComponent text_234
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_73
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS7
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    TextComponent text_235
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_236
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Annoyed
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    TextComponent text_237
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_74
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS8
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    TextComponent text_238
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_239
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Angry
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    TextComponent text_240
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_75
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS9
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    TextComponent text_241
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_242
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Irritated
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    TextComponent text_243
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_76
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SS10
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    TextComponent text_244
      color = black
      letterHeight = 0.045
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = How much do you feel this emotion now?
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    TextComponent text_245
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = Grouchy
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    TextComponent text_246
      color = black
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1=Not at all - 2 - 3 - 4 - 5=Extremely
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    KeyboardComponent key_resp_77
      allowedKeys [set every repeat] = 1,2,3,4,5,'1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  Routine consent2
  Routine questionnaire_start
  Routine PSWQ15
  Routine PSWQ16
  Routine q2_instructions
  Routine AM1
  Routine AM2
  Routine AM3
  Routine AM4
  Routine AM5
  Routine q3_instructions
  Routine SPQ1
  Routine SPQ2
  Routine SPQ3
  Routine SPQ4
  Routine SPQ5
  Routine SPQ6
  Routine SPQ7
  Routine SPQ8
  Routine SPQ9
  Routine SPQ10
  Routine SQP11
  Routine SPQ12
  Routine SPQ13
  Routine SPQ14
  Routine SPQ15
  Routine SPQ16
  Routine SPQ17
  Routine SPQ18
  Routine SPQ19
  Routine SPQ20
  Routine SPQ21
  Routine SPQ22
  Routine q4_instructions
  Routine SS1
  Routine SS2
  Routine SS3
  Routine SS4
  Routine SS5
  Routine SS6
  Routine SS7
  Routine SS8
  Routine SS9
  Routine SS10
  LoopInitiator instructions_get_right loopType="TrialHandler"
    loopType = sequential
    nReps = 500
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    Routine instructions
    Routine second_instructions
    Routine third_instructions
    Routine instructions4
    LoopInitiator practice_loop loopType="TrialHandler"
      loopType = random
      nReps = 500
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      LoopInitiator practice_trials loopType="TrialHandler"
        conditionsFile = stage2_4_practice.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')]),
          OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')])]
        Routine practice1
        Routine practice1_result
        Routine next_trial
      LoopTerminator practice_trials
      Routine practice1_quiz
      Routine practice1_quizfeedback
    LoopTerminator practice_loop
    Routine memory_quiz_instructions
    Routine quiz1_i
    Routine quiz2_i
    Routine quiz3
    Routine quiz4
    Routine quiz_feedback
  LoopTerminator instructions_get_right
  Routine start_learning
  LoopInitiator learning_phase loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator learn_1 loopType="TrialHandler"
      conditions = [{'image1': 'images/baby.png', 'action1': 'Press left', 'image2': 'images/backpack.png', 'corr_ans': 'left'}]
      conditionsFile = try_game.xlsx
      loopType = random
      nReps = 1
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      LoopInitiator incorrect_loop loopType="TrialHandler"
        loopType = random
        nReps = 9999
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        Routine learn1
        Routine check_incorrect1
      LoopTerminator incorrect_loop
      Routine learn2
      Routine next_trial
    LoopTerminator learn_1
    Routine counter_quizzes_round
    Routine between
    Routine back_to_learn
    LoopInitiator learn_1_2 loopType="TrialHandler"
      conditions = [{'image1': 'images/baby.png', 'action1': 'Press left', 'image2': 'images/backpack.png', 'corr_ans': 'left'}]
      conditionsFile = try_game.xlsx
      loopType = random
      nReps = 1
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      LoopInitiator incorrect_loop2 loopType="TrialHandler"
        loopType = random
        nReps = 9999
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        Routine learn1
        Routine check_incorrect
      LoopTerminator incorrect_loop2
      Routine learn2
      Routine next_trial
    LoopTerminator learn_1_2
    Routine between
    LoopInitiator quizloop2 loopType="TrialHandler"
      conditionsFile = quiz_1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'image1': 'images/baby.png', 'question': 'Where do you go when you press left?', 'corr_ans': 1, 'ans1': 'images/backpack.png', 'ans2': 'images/hammer.png', 'ans3': 'images/lamp.png', 'ans4': 'images/zebra.png'},
        {'image1': 'images/baby.png', 'question': 'Where do you go when you press right?', 'corr_ans': 3, 'ans1': 'images/lamp.png', 'ans2': 'images/car.png', 'ans3': 'images/bowtie.png', 'ans4': 'images/baby.png'},
        {'image1': 'images/toothbrush.png', 'question': 'Where do you go when you press left?', 'corr_ans': 2, 'ans1': 'images/lamp.png', 'ans2': 'images/car.png', 'ans3': 'images/hammer.png', 'ans4': 'images/bowtie.png'},
        {'image1': 'images/toothbrush.png', 'question': 'Where do you go when you press right?', 'corr_ans': 2, 'ans1': 'images/bowtie.png', 'ans2': 'images/backpack.png', 'ans3': 'images/toothbrush.png', 'ans4': 'images/lamp.png'},
        {'image1': 'images/car.png', 'question': 'Where do you go when you press left?', 'corr_ans': 4, 'ans1': 'images/zebra.png', 'ans2': 'images/backpack.png', 'ans3': 'images/hourglass.png', 'ans4': 'images/cat.png'},
        {'image1': 'images/car.png', 'question': 'Where do you go when you press right?', 'corr_ans': 3, 'ans1': 'images/cat.png', 'ans2': 'images/hammer.png', 'ans3': 'images/lamp.png', 'ans4': 'images/backpack.png'},
        {'image1': 'images/bowtie.png', 'question': 'Where do you go when you press left?', 'corr_ans': 2, 'ans1': 'images/lamp.png', 'ans2': 'images/knight.png', 'ans3': 'images/cat.png', 'ans4': 'images/car.png'}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
      Routine quiz2
      Routine quiz_feedback
    LoopTerminator quizloop2
    Routine planning_paths
    LoopInitiator planning_during_training loopType="TrialHandler"
      conditionsFile = forgetting1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ans1': 'images/baby.png', 'ans2': 'images/backpack.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'left', 'correct_answer2': 'left'},
        {'ans1': 'images/baby.png', 'ans2': 'images/backpack.png', 'ans3': 'images/zebra.png', 'correct_answer1': 'left', 'correct_answer2': 'right'},
        {'ans1': 'images/baby.png', 'ans2': 'images/bowtie.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'right', 'correct_answer2': 'right'},
        {'ans1': 'images/baby.png', 'ans2': 'images/bowtie.png', 'ans3': 'images/knight.png', 'correct_answer1': 'right', 'correct_answer2': 'left'},
        {'ans1': 'images/toothbrush.png', 'ans2': 'images/car.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'left', 'correct_answer2': 'right'},
        {'ans1': 'images/toothbrush.png', 'ans2': 'images/car.png', 'ans3': 'images/cat.png', 'correct_answer1': 'left', 'correct_answer2': 'left'},
        {'ans1': 'images/toothbrush.png', 'ans2': 'images/backpack.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'right', 'correct_answer2': 'left'},
        {'ans1': 'images/toothbrush.png', 'ans2': 'images/backpack.png', 'ans3': 'images/zebra.png', 'correct_answer1': 'right', 'correct_answer2': 'right'}]
      Routine forgetting_paths1
      Routine planningpathstraining2
      Routine correct_forget_paths
    LoopTerminator planning_during_training
    Routine total_score_planning
  LoopTerminator learning_phase
  Routine break_routine
  LoopInitiator instructions_planning_get_right loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine instructions_reward
    Routine instructions_planning_2
    Routine instructions_example_trial
    Routine long_term_reward_instructions
    Routine quiz_planning_1
    Routine quiz_planning_2
    Routine quiz_planning_3
    Routine quiz_feedback
  LoopTerminator instructions_planning_get_right
  Routine see_planning_trials
  Routine instructions_planning_new
  Routine planning_2_instructions
  Routine instructions_planning_new3
  Routine practice_planning_outcomes
  Routine immediate_rewar_lesson
  Routine lesson_practice
  Routine lesson_practice_2
  Routine start_real_planning
  LoopInitiator planning_loop loopType="TrialHandler"
    conditionsFile = planning_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65},
      {'r1': 'images/baby.png', 'r2': 'images/zebra.png', 'w1': 65, 'w2': 400, 'r3': 'images/backpack.png', 'r4': 'images/hourglass.png', 'w3': 65, 'w4': 65, 'r5': 'images/knight.png', 'w5': 65}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
    Routine plan1_info_2
    Routine plan2_info
    Routine plan3_info
    Routine planning4
    Routine next_trial
  LoopTerminator planning_loop
  Routine planning_paths
  LoopInitiator remember_planning_paths loopType="TrialHandler"
    conditionsFile = forgetting1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ans1': 'images/baby.png', 'ans2': 'images/backpack.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'left', 'correct_answer2': 'left'},
      {'ans1': 'images/baby.png', 'ans2': 'images/backpack.png', 'ans3': 'images/zebra.png', 'correct_answer1': 'left', 'correct_answer2': 'right'},
      {'ans1': 'images/baby.png', 'ans2': 'images/bowtie.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'right', 'correct_answer2': 'right'},
      {'ans1': 'images/baby.png', 'ans2': 'images/bowtie.png', 'ans3': 'images/knight.png', 'correct_answer1': 'right', 'correct_answer2': 'left'},
      {'ans1': 'images/toothbrush.png', 'ans2': 'images/car.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'left', 'correct_answer2': 'right'},
      {'ans1': 'images/toothbrush.png', 'ans2': 'images/car.png', 'ans3': 'images/cat.png', 'correct_answer1': 'left', 'correct_answer2': 'left'},
      {'ans1': 'images/toothbrush.png', 'ans2': 'images/backpack.png', 'ans3': 'images/lamp.png', 'correct_answer1': 'right', 'correct_answer2': 'left'},
      {'ans1': 'images/toothbrush.png', 'ans2': 'images/backpack.png', 'ans3': 'images/zebra.png', 'correct_answer1': 'right', 'correct_answer2': 'right'}]
    Routine forgetting_paths1
    Routine planningpathstraining2
    Routine correct_forget_paths
  LoopTerminator remember_planning_paths
  Routine total_score_planning
  Routine end
